PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1024, 600]
  color = $[-1,-1,-1]
  expName = MID_python
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    KeyboardComponent StartScreen_ButtonPress
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textStartScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Beginn der Aufgabe.

        Drücken Sie die rechte Taste, um mit der Aufgabe zu beginnen.

        Viel Erfolg!
  Routine CuePresentation
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    PolygonComponent CueCircle
      fillColor [set every repeat] = $colour
      lineColor [set every repeat] = $colour
      pos [set every repeat] = $location
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    KeyboardComponent EarlyPressCue
      allowedKeys [set every repeat] = 'left', 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      store = first key
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    CodeComponent button_count_cue_code
      Code Type = Auto->JS
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      Begin Routine:
        cue_button_count = 0 # Used for pushing button presses
      End Routine:
        if EarlyPressCue.keys != None:
            cue_button_count = 1
  Routine EndScreen
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    TextComponent EndScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlichen Glückwunsch, Sie haben die Aufgabe erfolgreich beendet!

        Bitte geben Sie der Versuchsleiterin Bescheid.

        Danke für die Teilnahme.
    KeyboardComponent EndScreen_buttonpress
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TargetPresentation
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    CodeComponent codeTargetPresTiming
      Code Type = Py
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      Begin Routine:
        # Calculates target presentation time, based on performance on previous trial.
        if trial_num > 1:
            if prev_trial_acc == "incorrect" or prev_trial_acc == "early" or prev_trial_acc == "no_response" and resp_time < 1:
                resp_time = resp_time + 0.050
                thisExp.addData('available_resp_time', resp_time);
                thisExp.addData('previous_trial_acc', prev_trial_acc);
            elif prev_trial_acc == "incorrect" or prev_trial_acc == "early" or prev_trial_acc == "no_response" and resp_time > 1:
                resp_time = resp_time
                thisExp.addData('available_resp_time', resp_time);
                thisExp.addData('previous_trial_acc', prev_trial_acc);
            else:
                resp_time = resp_time - 0.050
                thisExp.addData('available_resp_time', resp_time);
                thisExp.addData('previous_trial_acc', prev_trial_acc);
        else:
            thisExp.addData('available_resp_time', resp_time);
    PolygonComponent TargetPresentationScreen
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $resp_time
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    KeyboardComponent ButtonPressTarget
      allowedKeys = 'left','right'
      correctAns = $corr_button
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = resp_time
      store = first key
      storeCorrect = True
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    CodeComponent codeFeedbacksaving
      Code Type = Py
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      End Routine:
        feedbackver = [];
        # Used to decide feedback participants get based on cue (win, loss, neutral) and button press
        if EarlyPressCue.keys != None or EarlyPressFixation.keys != None and colour == "blue":
            feedbackver = "3"; # Early press win cue -> did not win point.
            thisExp.addData('outcome_label', "Early")
            prev_trial_acc = "early"
            #thisExp.addData('outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue.keys != None or EarlyPressFixation.keys != None and colour == "red":
            feedbackver = "4"; # Early press loss cue -> lost point.
            thisExp.addData('outcome_label', "Early")
            prev_trial_acc = "early"
            #thisExp.addData('outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue.keys != None or EarlyPressFixation.keys != None and colour == "yellow":
            feedbackver = "6"; # Early press neutral cue -> points stay the same, but incorrect.
            thisExp.addData('outcome_label', "Early")
            prev_trial_acc = "early"
            #thisExp.addData('outcome_val', -2)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 1 and colour == "blue":
            feedbackver = "1"; # Correct press win cue -> won point.
            thisExp.addData('outcome_label', "Correct")
            prev_trial_acc = "correct"
            #thisExp.addData('outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget.corr == 1 and colour == "red":
            feedbackver = "2"; # Correct press loss cue -> did not lose point.
            thisExp.addData('outcome_label', "Correct")
            prev_trial_acc = "correct"
            #thisExp.addData('outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget.corr == 1 and colour == "yellow":
            feedbackver = "5"; # Correct press neutral cue -> points stay the same.
            thisExp.addData('outcome_label', "Correct")
            prev_trial_acc = "correct"
            #thisExp.addData('outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget.corr == 0 and ButtonPressTarget.keys == None and colour == "blue":
            feedbackver = "3"; # Incorrect press win cue -> did not win point.
            thisExp.addData('outcome_label', "No_response")
            prev_trial_acc = "no_response"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 0 and ButtonPressTarget.keys == None and colour == "yellow":
            feedbackver = "6"; # Incorrect press neutral cue -> points stay the same.
            thisExp.addData('outcome_label', "No_response")
            prev_trial_acc = "no_response"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 0 and ButtonPressTarget.keys == None and colour == "red":
            feedbackver = "4"; # Incorrect press loss cue -> lost point.
            thisExp.addData('outcome_label', "No_response")
            prev_trial_acc = "no_response"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 0 and colour == "blue":
            feedbackver = "3"; # Incorrect press win cue -> did not win point.
            thisExp.addData('outcome_label', "Incorrect")
            prev_trial_acc = "incorrect"
            #thisExp.addData('outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 0 and colour == "yellow":
            feedbackver = "6"; # Incorrect press neutral cue -> points stay the same.
            thisExp.addData('outcome_label', "Incorrect")
            prev_trial_acc = "incorrect"
            #thisExp.addData('outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 0 and colour == "red":
            feedbackver = "4"; # Incorrect press loss cue -> lost point.
            thisExp.addData('outcome_label', "Incorrect")
            prev_trial_acc = "incorrect"
            #thisExp.addData('outcome_val', -1)
            calibration_accuracy.append(0)
  Routine FeedbackCode
    RoutineSettingsComponent FeedbackCode
      stopVal [duration (s)] = 2
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    CodeComponent feedbacktextcode
      Code Type = Auto->JS
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      Begin Routine:
        # Correct press win cue (blue)
        if feedbackver == "1":
            text = "Sie haben einen Punkt gewonnen";
            textcolour = 'green';
            treat_counter += 1;

        # Correct press loss cue (red)
        elif feedbackver == "2":
            text = "Sie haben keinen Punkt verloren";
            textcolour = 'green';

        # Incorrect press win cue (blue)
        elif feedbackver == "3":
            text = "Sie haben keinen Punkt gewonnen";
            textcolour = 'red';

        # Incorrect press loss cue (red)
        elif feedbackver == "4":
            text = "Sie haben einen Punkt verloren";
            textcolour = 'red';
            treat_counter -= 1;

        # Neutral cue, correct press, points unchanged (yellow)
        elif feedbackver == "5":
            text = "Sie haben keinen Punkt verloren";
            textcolour = 'green';

        # Neutral cue, incorrect press, points unchanged (yellow)
        else: #Feedback version 6
            text = "Sie haben keinen Punkt verloren";
            textcolour = 'red';
    TextComponent text_Feedback
      color [set every repeat] = $textcolour
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $text
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    TextComponent text_treatCounter
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $treat_counter
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  Routine ITI500
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    PolygonComponent trial_ITI
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent trial_num_code
      Code Type = Auto->JS
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      End Routine:
        # Used in codeTargetPresTiming
        trial_num = trial_num + 1;
  Routine RT_measure_start
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    TextComponent RT_measure_start_text
      letterHeight = 0.05
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
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      text:
        Initiale Reaktionsgeschwindigkeit.

        Wenn das grüne Kreuz rechts oder links erscheint, drücken Sie so schnell wie möglich die rechte oder linke Taste.

        Drücken Sie zum Starten die rechte Taste.
    CodeComponent RT_list_code
      Code Type = Auto->JS
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      Before Experiment:
        rt_list = []
    KeyboardComponent RT_startscreen_press
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine RT_measure_target
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    PolygonComponent RT_target_fig
      fillColor = green
      lineColor = green
      pos [set every repeat] = $rt_loc
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent RT_measure_response
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $rt_corr_press
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
      store = first key
      storeCorrect = True
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    CodeComponent add_RT_measure_code
      Code Type = Auto->JS
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      End Routine:
        rt_list.append(RT_measure_response.rt)
        thisExp.addData('rt_list', rt_list)
  Routine RT_measure_end
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    TextComponent RT_measure_endtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Ende des Tests zur Initiale Reaktionsgeschwindigkeit.
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    CodeComponent RT_measuring_code
      Code Type = Auto->JS
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      Begin Routine:
        # turn the list into a numpy array that supports
        # mathematical operations better:
        import numpy as np
        rt_array = np.array(rt_list)
        mean_rt = rt_array.mean()
        sd_rt = rt_array.std()

        resp_time = mean_rt + sd_rt
        print(resp_time)
  Routine RT_measure_fixation
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    PolygonComponent rt_measure_fixation
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine StartScreen_training
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    KeyboardComponent StartScreen_ButtonPress_training
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent StartScreen_text_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt folgen 12 Übungssitzungen.

        Drücken Sie zum Starten die rechte Taste.
    CodeComponent initialising_code
      Code Type = Auto->JS
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      Begin Experiment:
        prev_trial_acc = []
        calibration_accuracy = []
        resp_time = 0.800
    CodeComponent jitter_setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        dur = 0
        durations = [1.75,2,2.25]*50
        shuffle(durations)
  Routine initial_iti_training
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    PolygonComponent initial_iti_fig_training
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent initial_iti_code_training
      Code Type = Auto->JS
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      Begin Experiment:
        # Variables used for calculating target presentation time
        # and score count in practice loop
        reward_counter_training = 0;
        trial_num = 0;
  Routine CuePresentation_training
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    PolygonComponent CueCircle_training
      fillColor [set every repeat] = $colour
      lineColor [set every repeat] = $colour
      pos [set every repeat] = $location
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    KeyboardComponent EarlyPressCue_training
      allowedKeys [set every repeat] = 'left', 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      store = first key
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  Routine Fixation2000_training
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    PolygonComponent Fixation2000_fig_training
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
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    KeyboardComponent EarlyPressFixation_training
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
      store = first key
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    CodeComponent jitter_training_code
      Code Type = Auto->JS
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      Begin Routine:
        dur = durations.pop()
  Routine TargetPresentation_training
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    CodeComponent TargetPresTiming_code_training
      Code Type = Py
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      Begin Routine:
        # Calculates target presentation time, based on performance on previous trial.
        if trial_num > 1:
            if prev_trial_acc == "incorrect" or prev_trial_acc == "early" or prev_trial_acc == "no_response" and resp_time < 1:
                resp_time = resp_time + 0.050
                thisExp.addData('available_resp_time', resp_time);
                thisExp.addData('previous_trial_acc', prev_trial_acc);
            elif prev_trial_acc == "incorrect" or prev_trial_acc == "early" or prev_trial_acc == "no_response" and resp_time > 1:
                resp_time = resp_time
                thisExp.addData('available_resp_time', resp_time);
                thisExp.addData('previous_trial_acc', prev_trial_acc);
            else:
                resp_time = resp_time - 0.050
                thisExp.addData('available_resp_time', resp_time);
                thisExp.addData('previous_trial_acc', prev_trial_acc);
        else:
            thisExp.addData('available_resp_time', resp_time);
    PolygonComponent TargetPresentation_fig_training
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $resp_time
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    KeyboardComponent ButtonPressTarget_training
      allowedKeys = 'left','right'
      correctAns = $corr_button
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = resp_time
      store = first key
      storeCorrect = True
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    CodeComponent Feedbacksaving_code_training
      Code Type = Py
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      End Routine:
        feedbackver_training = [];
        # Prepares which feedback version is shown, based on win or loss cues and button press performance.
        if EarlyPressCue_training.keys != None or EarlyPressFixation_training.keys != None and colour == "blue":
            feedbackver_training = "3"; # Early press win cue -> did not win point.
            prev_trial_acc = "early"
            thisExp.addData('outcome_label_training', "Early")
            #thisExp.addData('practice_outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue_training.keys != None or EarlyPressFixation_training.keys != None and colour == "red":
            feedbackver_training = "4"; # Early press loss cue -> lost point.
            prev_trial_acc = "early"
            thisExp.addData('outcome_label_training', "Early")
            #thisExp.addData('practice_outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue_training.keys != None or EarlyPressFixation_training.keys != None and colour == "yellow":
            feedbackver_training = "6"; # Early press neutral cue -> points stay the same but incorrect.
            thisExp.addData('outcome_label_training', "Early")
            prev_trial_acc = "early"
            #thisExp.addData('practice_outcome_val', -2)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 1 and colour == "blue":
            feedbackver_training = "1"; # Correct press win cue -> won point.
            prev_trial_acc = "correct"
            thisExp.addData('outcome_label_training', "Correct")
            #thisExp.addData('practice_outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget_training.corr == 1 and colour == "red":
            feedbackver_training = "2"; # Correct press loss cue -> did not lose point.
            thisExp.addData('outcome_label_training', "Correct")
            prev_trial_acc = "correct"
            #thisExp.addData('practice_outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget_training.corr == 1 and colour == "yellow":
            feedbackver_training = "5"; # Correct press neutral cue -> points stay the same.
            thisExp.addData('outcome_label_training', "Correct")
            prev_trial_acc = "correct"
            #thisExp.addData('practice_outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget_training.corr == 0 and ButtonPressTarget_training.keys == None and colour == "blue":
            feedbackver_training = "3"; # Incorrect press win cue -> did not win point.
            thisExp.addData('outcome_label_training', "No_response")
            prev_trial_acc = "no_response"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 0 and ButtonPressTarget_training.keys == None and colour == "yellow":
            feedbackver_training = "6"; # Incorrect press neutral cue -> points stay the same.
            thisExp.addData('outcome_label_training', "No_response")
            prev_trial_acc = "no_response"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 0 and ButtonPressTarget_training.keys == None and colour == "red":
            feedbackver_training = "4"; # Incorrect press loss cue -> lost point.
            thisExp.addData('outcome_label_training', "No_response")
            prev_trial_acc = "no_response"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 0 and colour == "blue":
            feedbackver_training = "3"; # Incorrect press win cue -> did not win point.
            thisExp.addData('outcome_label_training', "Incorrect")
            prev_trial_acc = "incorrect"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 0 and colour == "yellow":
            feedbackver_training = "6"; # Incorrect press neutral cue -> points stay the same.
            thisExp.addData('outcome_label_training', "Incorrect")
            prev_trial_acc = "incorrect"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 0 and colour == "red":
            feedbackver_training = "4"; # Incorrect press loss cue -> lost point.
            thisExp.addData('outcome_label_training', "Incorrect")
            prev_trial_acc = "incorrect"
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
  Routine FeedbackCode_training
    RoutineSettingsComponent FeedbackCode_training
      stopVal [duration (s)] = 2
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    CodeComponent practice_feedbacktextcode
      Code Type = Auto->JS
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      Begin Routine:
        # Correct press win cue (blue)
        if feedbackver_training == "1":
            text_training = "Sie haben einen Punkt gewonnen";
            textcolour_training = 'green';
            reward_counter_training += 1;

        # Correct press loss cue (red)
        elif feedbackver_training == "2":
            text_training = "Sie haben keinen Punkt verloren";
            textcolour_training = 'green';

        # Incorrect press win cue (blue)
        elif feedbackver_training == "3":
            text_training = "Sie haben keinen Punkt gewonnen";
            textcolour_training = 'red';

        # Incorrect press loss cue (red)
        elif feedbackver_training == "4":
            text_training = "Sie haben einen Punkt verloren";
            textcolour_training = 'red';
            reward_counter_training -= 1;

        # Neutral cue, correct press, points unchanged (yellow)
        elif feedbackver_training == "5":
            text_training = "Sie haben keinen Punkt verloren";
            textcolour_training = 'green';

        # Neutral cue, incorrect press, points unchanged (yellow)
        else: #Feedback version 6
            text_training = "Sie haben keinen Punkt verloren";
            textcolour_training = 'red';
    TextComponent text_Feedback_training
      color [set every repeat] = $textcolour_training
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $text_training
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    TextComponent text_treatCounter_training
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $reward_counter_training
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  Routine ITI500_training
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    PolygonComponent trial_ITI_training
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent trial_num_code_training
      Code Type = Auto->JS
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      End Routine:
        # Trial_num is used in code_TargetPresTiming
        trial_num = trial_num + 1;
  Routine EndScreen_training
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    TextComponent EndScreenText_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlichen Glückwunsch, Sie haben die Trainingsphase erfolgreich beendet!

        Bitte geben Sie der Versuchsleiterin Bescheid, um fortzufahren.
    KeyboardComponent endTraining_startMain
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine instruction_video
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    MovieComponent MID_movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Erklärvideo MID_v2.mp4
      startVal [time (s)] = 0.0
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  Routine Fixation2000
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    PolygonComponent FixationScreen
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
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    KeyboardComponent EarlyPressFixation
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
      store = first key
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    CodeComponent fix_count_button_code
      Code Type = Auto->JS
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      Begin Routine:
        fix_button_count = 0 #to count if button pressed
      End Routine:
        if EarlyPressFixation.keys != None:
            fix_button_count = 1
    CodeComponent jitter_code
      Code Type = Auto->JS
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      Begin Routine:
        dur = durations.pop()
      End Routine:
        thisExp.addData('jitter', dur)
  Routine initial_iti
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    PolygonComponent first_ITI_fig
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent leadin_ITI_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Variables used for score count
        treat_counter = 0;
  Routine Halfway_break
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    TextComponent Halfway_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Kurze Pause!

        Sie können sich jetzt ausruhen, bevor Sie wieder anfangen.

        Wenn Sie bereit sind, drücken Sie die rechte Taste.
    KeyboardComponent Halfway_ButtonPress
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent Halfway_code
      Code Type = Auto->JS
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      Begin Routine:
        if MainLoop.thisN != 64:
            continueRoutine = False
  Routine Blank_screen_training
    RoutineSettingsComponent Blank_screen_training
      stopVal [duration (s)] = 0.5
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  Routine Blank_screen
    RoutineSettingsComponent Blank_screen
      stopVal [duration (s)] = 0.5
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Flow
  Routine StartScreen_training
  Routine initial_iti_training
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = MID_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'colour': 'blue', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'blue', 'location': (0.35, 0), 'corr_button': 'right'},
      {'colour': 'yellow', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'yellow', 'location': (0.35, 0), 'corr_button': 'right'},
      {'colour': 'red', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'red', 'location': (0.35, 0), 'corr_button': 'right'}]
    Routine CuePresentation_training
    Routine Fixation2000_training
    Routine TargetPresentation_training
    Routine Blank_screen_training
    Routine FeedbackCode_training
    Routine ITI500_training
  LoopTerminator PracticeLoop
  Routine EndScreen_training
  Routine WelcomeScreen
  Routine initial_iti
  LoopInitiator MainLoop loopType="TrialHandler"
    conditionsFile = MID_conditions.xlsx
    loopType = random
    nReps = 23
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    conditions:
      [{'colour': 'blue', 'location': (-0.45, 0), 'corr_button': 'left'},
      {'colour': 'blue', 'location': (0.45, 0), 'corr_button': 'right'},
      {'colour': 'yellow', 'location': (-0.45, 0), 'corr_button': 'left'},
      {'colour': 'yellow', 'location': (0.45, 0), 'corr_button': 'right'},
      {'colour': 'red', 'location': (-0.45, 0), 'corr_button': 'left'},
      {'colour': 'red', 'location': (0.45, 0), 'corr_button': 'right'}]
    Routine CuePresentation
    Routine Fixation2000
    Routine TargetPresentation
    Routine Blank_screen
    Routine FeedbackCode
    Routine ITI500
    Routine Halfway_break
  LoopTerminator MainLoop
  Routine EndScreen
